PsychoPy2experiment version="2025.1.1"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1280, 720]
  expName = colormemory
  keyboardBackend = PsychToolbox
  measureFrameRate = False
  runMode = 1
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Routines
  Routine trial
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    PolygonComponent polygon
      fillColor [set every repeat] = $Background
      shape = rectangle
      size = (1, 1)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Word
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  Routine instructions
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    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        In the beginning of this experiment, a list of words will be presented on a colored background.

        Your task is simple, you just need to pay attention to those words and try to memorize them. You don´t need to press any key during this phase. When the list ends, there will be a 10-second pause, in which you should not do anything.

        Press "space" to begin the experiment.
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine end
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        The experiment has finished

        Thank you for your collaboration :)
  Routine instructions2
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    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Now, the recognition phase of the experiment will begin.

        You will see a list of words that may have appeared in the initial list or may be new, your task is to decide this after each word appeared:

        - Press "y" if you recognize the word.
        - Press "n" if you don´t recognize it.

        Press "space" to begin this phase.
    KeyboardComponent key_resp_2
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine trial2
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    TextComponent text_5
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text [set every repeat] = $Word2
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    KeyboardComponent key_resp_3
      allowedKeys = 'y','n'
      correctAns = $Correctanswer
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      storeCorrect = True
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = Primer excel explicativo t.experimental.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Background': 'Red', 'Word': 'Fire', 'Wordtemperature': 'Non-neutral'},
      {'Background': 'Orange', 'Word': 'Pumpkin', 'Wordtemperature': 'Non-neutral'},
      {'Background': 'Yellow', 'Word': 'Sun', 'Wordtemperature': 'Non-neutral'},
      {'Background': 'Blue', 'Word': 'Sea', 'Wordtemperature': 'Non-neutral'},
      {'Background': 'Green', 'Word': 'Nature', 'Wordtemperature': 'Non-neutral'},
      {'Background': 'Purple', 'Word': 'Lilac', 'Wordtemperature': 'Non-neutral'},
      {'Background': 'Red', 'Word': 'Clock', 'Wordtemperature': 'Neutral'},
      {'Background': 'Orange', 'Word': 'Window', 'Wordtemperature': 'Neutral'},
      {'Background': 'Yellow', 'Word': 'Street', 'Wordtemperature': 'Neutral'},
      {'Background': 'Blue', 'Word': 'Table', 'Wordtemperature': 'Neutral'},
      {'Background': 'Green', 'Word': 'Shoe', 'Wordtemperature': 'Neutral'},
      {'Background': 'Purple', 'Word': 'Map', 'Wordtemperature': 'Neutral'}]
    Routine trial
  LoopTerminator trials
  Routine instructions2
  LoopInitiator trials_2 loopType="TrialHandler"
    conditionsFile = Segundo excel reconocimiento t.experimental.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [{'Word2': 'Fire', 'Wordtemperature2': 'Non-neutral', 'Relatedwords': None, 'Correctanswer': 'y'},
      {'Word2': 'Pumpkin', 'Wordtemperature2': 'Non-neutral', 'Relatedwords': None, 'Correctanswer': 'y'},
      {'Word2': 'Sun', 'Wordtemperature2': 'Non-neutral', 'Relatedwords': None, 'Correctanswer': 'y'},
      {'Word2': 'Sea', 'Wordtemperature2': 'Non-neutral', 'Relatedwords': None, 'Correctanswer': 'y'},
      {'Word2': 'Nature', 'Wordtemperature2': 'Non-neutral', 'Relatedwords': None, 'Correctanswer': 'y'},
      {'Word2': 'Lilac', 'Wordtemperature2': 'Non-neutral', 'Relatedwords': None, 'Correctanswer': 'y'},
      {'Word2': 'Clock', 'Wordtemperature2': 'Neutral', 'Relatedwords': None, 'Correctanswer': 'y'},
      {'Word2': 'Window', 'Wordtemperature2': 'Neutral', 'Relatedwords': None, 'Correctanswer': 'y'},
      {'Word2': 'Street', 'Wordtemperature2': 'Neutral', 'Relatedwords': None, 'Correctanswer': 'y'},
      {'Word2': 'Table', 'Wordtemperature2': 'Neutral', 'Relatedwords': None, 'Correctanswer': 'y'},
      {'Word2': 'Shoe', 'Wordtemperature2': 'Neutral', 'Relatedwords': None, 'Correctanswer': 'y'},
      {'Word2': 'Map', 'Wordtemperature2': 'Neutral', 'Relatedwords': None, 'Correctanswer': 'y'},
      {'Word2': 'Flame', 'Wordtemperature2': 'Non-neutral', 'Relatedwords': 'Yes', 'Correctanswer': 'n'},
      {'Word2': 'Time', 'Wordtemperature2': 'Neutral', 'Relatedwords': 'Yes', 'Correctanswer': 'n'},
      {'Word2': 'Carrot', 'Wordtemperature2': 'Non-neutral', 'Relatedwords': 'Yes', 'Correctanswer': 'n'}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
    Routine trial2
  LoopTerminator trials_2
  Routine end
